PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'../data/%s_%s_%s' % (expInfo['Dyad ID'], expInfo['Subject ID'], expName)
  Experiment info = {'Dyad ID': '', 'Subject ID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 960]
  colPriority = {'stimuli': 'priority.HIGH', 'category': 'priority.HIGH', 'resp_key.keys': 'priority.HIGH', 'Dyad ID': 'priority.CRITICAL', 'Subject ID': 'priority.CRITICAL', 'thisN': 'priority.HIGH', 'runs': 'priority.HIGH'}
  expName = social-animation
  keyboardBackend = PsychToolbox
  runMode = 1
  sortColumns = priority
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Routines
  Routine intro
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    CodeComponent start_trigger
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[99])
        print(99)
    TextComponent Intro
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You will now watch short clips of shapes and decide if they are having a social interaction or not.

        When the clip is finished, you will be prompted to make a decision.

        For a social interaction, press the left arrow key. For no interaction, press the right arrow key. If you are not sure, press the down arrow key.
    TextComponent start_task_text
      letterHeight = 0.04
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 7.5
      text = Please wait for the experimenter to start the task.
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    KeyboardComponent start_task
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 7.5
      store = nothing
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    SoundComponent start_sound
      saveStartStop = False
      sound [set every repeat] = D
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine video_phase
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    MovieComponent video_stim
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $stimuli
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      syncScreenRefresh = False
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    CodeComponent routine_trigger
      Code Type = Py
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      Begin Routine:
        i = int(Trials.thisN)
        condition = 0
        if Trials.trialList[i]['category'] == 'nonsocial' :
            condition = 1
        else :
            condition = 2
        trigger = ((i+1)*10) + condition
        outlet.push_sample(x=[trigger])
        print('trigger:', trigger)
  Routine resp_phase
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    TextComponent social
      letterHeight = 0.05
      pos = (-0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Social
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    TextComponent unsure
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Unsure
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    TextComponent no_interaction
      letterHeight = 0.05
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = No Interaction
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    TextComponent left
      letterHeight = 0.045
      pos = (-0.5, -0.055)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = (Left)
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    TextComponent down
      letterHeight = 0.045
      pos = (0, -0.055)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = (Down)
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    TextComponent right
      letterHeight = 0.045
      pos = (0.5, -0.055)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = (Right)
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    KeyboardComponent resp_key
      allowedKeys = 'left','down','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    CodeComponent response_trigger
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[77])
        print('trigger: 77')
  Routine fixation_phase
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    TextComponent fixation
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = +
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    CodeComponent fixation_trigger
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[66])
        print('trigger: 66')
  Routine end_task
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    SoundComponent end_sound
      forceEndRoutine = False
      sound [set every repeat] = C
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent end_task_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank you for participanting.
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    CodeComponent end_trigger
      Code Type = Py
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      End Routine:
        outlet.push_sample(x=[99])
        print(99)
    SoundComponent end_sound
      sound [set every repeat] = C
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine trigger_test
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    TextComponent trigger_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press space to send a test trigger.
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    CodeComponent trigger_test_code
      Code Type = Auto->JS
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      Before Experiment:
        from pylsl import resolve_streams, StreamOutlet, StreamInfo
        info = StreamInfo(name='Trigger1', type='Markers', channel_count=1, channel_format='int32', source_id='Tangrams')  # pyright: ignore[reportArgumentType]
        outlet = StreamOutlet(info)
      End Routine:
        outlet.push_sample(x=[1])
        print('trigger test')
    KeyboardComponent trigger_test_space
      allowedKeys = 'space', 'esc'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trigger_test
  Routine intro
  LoopInitiator Runs loopType="TrialHandler"
    conditionsFile = ../stimuli/run_files.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('runs', np.int64(1)), ('file', '../stimuli/run1.csv')]),
      OrderedDict([('runs', np.int64(2)), ('file', '../stimuli/run2.csv')])]
    LoopInitiator Trials loopType="TrialHandler"
      conditionsFile = $file
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('stimuli', '../stimuli/COAXING-B.AVI'), ('category', 'social')]),
        OrderedDict([('stimuli', '../stimuli/DANCING.AVI'), ('category', 'social')]),
        OrderedDict([('stimuli', '../stimuli/MOCKING-A.AVI'), ('category', 'social')]),
        OrderedDict([('stimuli', '../stimuli/SharingIcecream.AVI'), ('category', 'social')]),
        OrderedDict([('stimuli', '../stimuli/SURPRISING-A.AVI'), ('category', 'social')]),
        OrderedDict([('stimuli', '../stimuli/DRIFTING-A.AVI'), ('category', 'nonsocial')]),
        OrderedDict([('stimuli', '../stimuli/RANDOM SOCIAL.AVI'), ('category', 'nonsocial')]),
        OrderedDict([('stimuli', '../stimuli/STAR-A.AVI'), ('category', 'nonsocial')]),
        OrderedDict([('stimuli', '../stimuli/RANDOM MECHANICAL.AVI'), ('category', 'nonsocial')]),
        OrderedDict([('stimuli', '../stimuli/TENNIS-A.AVI'), ('category', 'nonsocial')])]
      Routine video_phase
      Routine resp_phase
      Routine fixation_phase
    LoopTerminator Trials
  LoopTerminator Runs
  Routine end_task
